; ==============================================================================
; TestController Driver Definition: HP / Agilent / Keysight E363xA DC Supplies
; ==============================================================================
; Covers the E3632A, E3633A and E3634A.  Revision 1.8 - 2026-08-23
;
; Command syntax verified against the Keysight E3633A/E3634A User's Guide
; 9018-01164 (ed. 7), the E3632A User's Guide 9018-01309 and the E363xA data
; sheet 5968-9726EN, and tested live against an E3633A (F/W 1.6-5.0-1.0) over
; GPIB. The E3633A ceilings below were read back from the instrument rather than
; taken from the data sheet: P8V 8.24 V / 20.6 A, P20V 20.60 V / 10.3 A, OVP and
; OCP both 22. The E3632A and E3634A figures are manual-derived and still need
; hardware confirmation.
;
; Every page was exercised page by page against a live E3633A, the selector
; included, and both trip indicators were seen lighting Clear. Still unseen: the
; OCP indicator's own red-to-green transition, which needs a load to provoke.
;
; Changes since revision 1.5:
;   * The five settings pages moved from tabs to a Settings View selector.
;     Control names lost their page qualifier as a consequence, and
;     Current_Limit became Current. #name and #handle are unchanged, so saved
;     setups are unaffected.
;   * Regulation is logged as DIGITAL(CC,CV) rather than the raw register, so the
;     column names the mode and draws on the shared digital scale instead of
;     consuming a numeric curve. Verified on an E3633A: register 0 leaves the
;     column blank, register 2 reads CV, and the saved file keeps the raw integer.
;   * The OVP and OCP indicators could never light "Clear". The clear condition
;     was a bare 0, which is false as a script expression, so both fell through
;     to the unlit fallback and a cleared trip showed as nothing at all. It is
;     now int(value)==0. Trip detection itself was never affected.
;   * #interfaceType declares Readout alongside PS. setReadoutString was already
;     implemented, but the Remote Readout popup filters on the interface type, so
;     a PS-only device could never appear in its device list.
;   * Voltage and current step fields renamed to *_Increment.
;   * Clear Display Message writes DISP:TEXT "" ahead of DISP:TEXT:CLE, so the
;     field's re-read comes back empty instead of restoring the cleared text.
;
; Notes on the E363xA command set:
;   * There is no CV/CC mode command. The supply runs in constant voltage until
;     the load reaches the current limit, then crosses into constant current by
;     itself, so there is one voltage setpoint, one current limit, and a
;     Regulation readout saying which side the hardware is on. An earlier
;     revision offered CV and CC as modes whose controls wrote the same
;     VOLT/CURR registers - do not reintroduce that.
;   * Changing the range turns the output off first. That is deliberate: it
;     avoids carrying a low-range, high-current setup into high-range voltage.
;   * GPIB and RS-232 are both built in, but only one is enabled at a time from
;     the front panel. SYST:REM and SYST:LOC are RS-232 only, so SCPIx wrappers
;     keep them off GPIB and [LOC] returns the supply to local on disconnect.
;   * Connecting does not reset the supply. Disconnecting and TestController's
;     Output Off disable the output but leave protection trips and the
;     programmed state alone.
;   * OUTP:REL is omitted deliberately - it drives optional TTL relay signals on
;     the RS-232 connector, and the manual warns against using RS-232 when those
;     are configured.
;
; Notes on the layout:
;   * The five settings pages - Basic Setup, Fine Adjust, Protection, Trigger
;     and Utility - are named by a selector driven by the Settings View
;     combobox, so exactly one of them is on screen at a time. Output, the
;     output range, the two setpoints and the temperature indicator belong to no
;     page at all and stay visible above the selector, because those are the
;     controls in use while the supply is running.
;   * The selector names every page this file defines, and that is the whole
;     trick. A page the selector does not name paints over the selector-driven
;     content instead of sitting beside it; the two shapes that render correctly
;     are "selector only" and "plain pages only", and this driver is the first.
;   * Which page is showing is client-side state. setView, getView? and InitView
;     only write and read the viewState variable, so changing page sends nothing
;     to the supply, and InitView opens the dialog on Basic Setup.
;   * The range-dependent ceilings come from advNumber expressions. Output_Range
;     sits outside the pages, so every advNumber can read it as a variable;
;     Output_Range lists the four advNumbers in its :update: tag so they
;     re-evaluate on a range change.
;   * An advNumber limit line is split into exactly three whitespace-separated
;     tokens - unit, min, max - so the expression must contain no spaces at all.
;     A list written "LOW 0" becomes a fourth token and the driver fails to load
;     with "Line do not contain 3 parameters", taking the port scan down with an
;     IndexOutOfBounds. inList's default delimiter is "[|,; ]+", so "LOW,0" is
;     the same test without a space.
;
; Instrument quirks found during validation:
;   * A rejected query leaves a pending unread response, so its -420 "Query
;     UNTERMINATED" surfaces on the NEXT error read rather than its own. When
;     probing this family, read SYST:ERR? after every single query or the blame
;     lands one command late.
;   * VOLT:STEP? and CURR:STEP? do NOT accept MIN, MAX or DEF as query
;     arguments, even though VOLT:STEP DEF is a valid setting command. Only the
;     bare query works, so the step floors below are literals.
;   * VOLT? MAX / CURR? MAX do work, and follow the selected range.
;   * DISP:TEXT:CLE returns the panel to its normal readout but leaves the text
;     buffer holding the string it just stopped showing, so DISP:TEXT? keeps
;     answering with the cleared text. Writing DISP:TEXT "" first empties the
;     buffer for real. Confirmed on an E3633A; the E3632A and E3634A are
;     untested.
;
; This driver claims the same three #idString values as the shipped
; "AgilentHP E363xA.TXT". Only one can win the match - move the stock file out
; of the Devices folder to use this one.
;
; Cyclotron, MIT licensed - see LICENSE.
;
; Latest version: https://github.com/Cyclotronic/TC-Drivers
; TestController by HKJ: https://lygte-info.dk/project/TestControllerIntro%20UK.html
; Discussion: https://www.eevblog.com/forum/testgear/program-that-can-log-from-many-multimeters/
; ==============================================================================

#metadef
#idString HEWLETT-PACKARD,E3632A,
#name HP E3632A
#handle HPE3632A
#replaceText LowRangeName 15V_7A
#replaceText HighRangeName 30V_4A
#replaceText LowVoltageMax 15.45
#replaceText LowCurrentMax 7.21
#replaceText HighVoltageMax 30.90
#replaceText HighCurrentMax 4.12
#replaceText OVPMax 32
#replaceText OCPMax 7.5
#replaceText VoltageStepMin 0.00055
#replaceText CurrentStepMin 0.00012

#metadef
#idString HEWLETT-PACKARD,E3633A,
#name HP E3633A
#handle HPE3633A
#replaceText LowRangeName 8V_20A
#replaceText HighRangeName 20V_10A
#replaceText LowVoltageMax 8.24
#replaceText LowCurrentMax 20.60
#replaceText HighVoltageMax 20.60
#replaceText HighCurrentMax 10.30
#replaceText OVPMax 22
#replaceText OCPMax 22
; Increment floors, read back from the hardware: VOLT:STEP? = 0.0003644277 and
; CURR:STEP? = 0.0003802001. They are rounded DOWN to the six decimals the
; :format: D6 on those fields displays. Rounding up instead puts the minimum
; above the value the field shows for the instrument's own default increment,
; and both fields come up red the moment Smallest Increment is pressed. The
; 0.00032 used for current before this came from the data sheet, below what it
; resolves.
#replaceText VoltageStepMin 0.000364
#replaceText CurrentStepMin 0.000380

#metadef
#idString HEWLETT-PACKARD,E3634A,
#name HP E3634A
#handle HPE3634A
#replaceText LowRangeName 25V_7A
#replaceText HighRangeName 50V_4A
#replaceText LowVoltageMax 25.75
#replaceText LowCurrentMax 7.21
#replaceText HighVoltageMax 51.50
#replaceText HighCurrentMax 4.12
#replaceText OVPMax 55
#replaceText OCPMax 7.5
#replaceText VoltageStepMin 0.00095
#replaceText CurrentStepMin 0.00013

#meta
#idString HEWLETT-PACKARD,E3632A,
#name HP E363xA
#handle HPE363xA

#replaceText LowRangeName 15V_7A
#replaceText HighRangeName 30V_4A
#replaceText LowVoltageMax 15.45
#replaceText LowCurrentMax 7.21
#replaceText HighVoltageMax 30.90
#replaceText HighCurrentMax 4.12
#replaceText OVPMax 32
#replaceText OCPMax 7.5
#replaceText VoltageStepMin 0.00055
#replaceText CurrentStepMin 0.00012

#author Cyclotron
#notes Dual-range E3632A, E3633A and E3634A DC supply. Selector for Basic_Setup, Fine Adjust, Protection, Trigger and Utility; the setpoint ceilings follow the selected output range. E3633A command set and range limits are live-verified; E3632A and E3634A limits are manual-derived.

#driver SCPIx
#port comfixedbaud GPIB
#baudrate 9600N82RD
#eol \n




#gpibReadEol eoi

#interfaceType PS Readout

; The supply returns one response per query. TestController sends semicolon-separated
; #askValues entries as independent commands, matching the live GPIB validation.
;
; Five channels are logged rather than the obvious two, because a test cannot
; usually be re-run to recover a value nobody thought to record:
;
;   Voltage / Current       what the terminals are actually doing (MEAS:)
;   VoltageSet / CurrentSet what the supply was asked for (VOLT? / CURR?)
;   Regulation              which side the supply is regulating on
;
; Charting the measured value against its setpoint shows the output sagging away
; from the demand under load, which neither one alone reveals. Regulation catches
; the moment a load pulls the supply out of constant voltage into constant
; current - usually the point of the test, and invisible from voltage and current
; alone when the limit happens to sit where the load settles. It is logged as a
; DIGITAL value, so the column names the mode instead of printing a number and
; the chart draws it on the shared digital scale rather than as a curve:
;     bit 0 (1) = CC   constant current
;     bit 1 (2) = CV   constant voltage
; Neither bit set means the output is off or unregulated, and the column is then
; blank rather than showing 0. Both bits set has no documented meaning; it would
; show as "CC CV". Note the manual labels bit 0 "Voltage" and bit 1 "Current",
; naming the quantity that is no longer regulated rather than the mode - bit 0 is
; set when the supply is in constant current. The names here are the mode, which
; is what the column is for; do not "correct" them to match the manual's labels.
;
; The same Questionable Status register also carries overtemperature (bit 4),
; OVP tripped (bit 9) and OCP tripped (bit 10). DIGITAL cannot name those: there
; is no working way to skip a bit, so only a run of bits from 0 can be labelled.
; Nothing is lost. Those three already have their own indicators in the Main and
; Protection setup panels, reading VOLT:PROT:TRIP? and CURR:PROT:TRIP? directly,
; and a saved log keeps the raw integer whatever the display format is - so the
; file still carries every bit even when the on-screen column is blank.
;
; The bits are not latched, so this is the live state at each reading.
;
; The cost is five GPIB round trips per reading instead of two. That is hidden by
; #readingDelay 2; drop that delay for fast logging and it becomes the limit.
; Logging scope is a device mode, chosen from the mode menu rather than the
; setup panel, so it cannot be changed while logging is running and a log's
; columns stay fixed for its whole run. Two modes:
;
;   "Log All"          - Voltage, Current, VoltageSet, CurrentSet, Regulation
;   "Log V and I only" - Voltage and Current
;
; The supply has no notion of a logging mode, so the active one is held in the
; client-side variable logMode: each #cmdMode sets it, #askMode reads it back,
; and processModeString maps that to the mode name that gates #askValues and the
; #value columns. Voltage and Current carry both mode names; the three extras
; carry only Log_All. Each query keeps its trailing [20], wrapped with it, so
; the V-and-I mode drops three queries and their delays together and the two
; that remain stay 20 ms apart, which the serial path needs.
#askValues [mode:Log_All,Log_V_and_I_only]MEAS:VOLT?;[20];MEAS:CURR?;[20];[mode:Log_All]VOLT?;[20];CURR?;[20];STAT:QUES:COND?;[20];[mode:]
#value Voltage V D4 Log_All,Log_V_and_I_only
#value Current A D4 Log_All,Log_V_and_I_only
#value VoltageSet V D4 Log_All
#value CurrentSet A D4 Log_All
#value Regulation - DIGITAL(CC,CV) Log_All
#readingDelay 2
#modeChangeDelay 0.5
#askMode LogModeGet?
#cmdModeLayout 1 2

; SYST:REM/SYST:LOC are valid only for RS-232 on this family.

#scpiCmd setView none
:setvar: viewState=inputValue

#scpiCmd getView? none?
:readmath: viewState

#scpiCmd InitView none
:setvar: viewState="Basic_Setup"

#scpiCmd SerialInit #pgm#
if (portType!="GPIB")
  deviceWrite(handle,"SYST:REM");
endif;

#scpiCmd SerialExit #pgm#
if (portType!="GPIB")
  deviceWrite(handle,"SYST:LOC");
endif;

; SCPIx sends this interface-control token only for a GPIB connection.
#scpiCmd GpibExit
[LOC]

; Quote the user text required by DISP:TEXT while keeping the setup control simple.
#scpiCmd SetDisplayText tx DISP:TEXT "(value)"

; Logging-mode plumbing. Each #cmdMode below runs one of these Set shims, which
; store the mode's token in logMode without touching the bus; LogModeGet? hands
; that token back to #askMode. The tokens are the modes' deviceModeNames (ALL,
; VI), which getFunctionModeFromDeviceMode maps to the mode names.
#scpiCmd SetModeAll none
:setvar: logMode="ALL"

#scpiCmd SetModeVI none
:setvar: logMode="VI"

#scpiCmd LogModeGet? none?
:readmath: logMode

; The two selectable logging modes. The command that backs each one only sets
; the client variable - nothing is sent to the supply.
#cmdMode Log_All ALL
SetModeAll

#cmdMode Log_V_and_I_only VI
SetModeVI

#initCmd SetModeAll;SerialInit;InitView;
#finalCmd OUTP OFF;[*OPC];SerialExit;GpibExit
#outputOff OUTP OFF

; Generic TestController power-supply interface.
#interface setVoltage VOLT (value)
#interface setCurrent CURR (value)
#interface setOn OUTP (value)
#interface getVoltage VOLT?
#interface getCurrent CURR?
#interface getOn OUTP?
#interface readVoltage 0
#interface readCurrent 1

; Exposes the front-panel display to TestController's Steps and Remote Readout
; popups: a step can write a short label to the supply's display. String
; interfaces carry no (channel) token, so TC evaluates the command as a script
; expression rather than doing a plain (value) substitution - hence the
; concatenation that wraps the text in quotes for DISP:TEXT, exactly as the
; stock display drivers do. The display holds up to 12 characters; longer text
; is truncated to 12 silently and queues no error - bench-confirmed, and not
; the -150 String data error that was expected. An embedded double quote is a
; separate trap: it closes the concatenation early, giving DISP:TEXT "AB"CD",
; which the supply rejects with -103,"Invalid separator", discards, and leaves
; the previous text in place - so that one fails safe, but silently.
#interface setReadoutString DISP:TEXT ("\""+value+"\"")

; ==============================================================================
; The whole dialog, in the order the supply gets used
; ==============================================================================
; Only the setpoint and pending-setpoint pages differ between the two rows; every
; other page is shared, so the layout does not move when the range changes.

; A single button showing the state it is in, the way the instrument's own output
; key does: grey when off, green when on.
;
; No tag sets a button's size - :labelformat: explicitly excludes buttons and
; :textwidth: only affects input fields - so the button sizes to its label.
; :nogrid: would additionally free it from the form's column grid; it is
; undocumented but used by 55 of the toggleButtons in the shipped drivers. Left
; off so the button aligns with the controls below it.
;
; The two labels differ by one character, so the button may shift very slightly as
; it toggles - the docs warn a toggleButton resizes with its label. Padding them to
; equal length only worked by adding a visible character, which was worse.


#cmdSetup toggleButton Output
:read: [20];OUTP?
:write: OUTP (value)
:updatedelayed: 0.2
:updatealloff:
:color: gray green
:tip: Enable or disable the DC output. One click toggles it - the button shows the state the output is in now.
OUTPUT_OFF 0
OUTPUT_ON 1

#cmdSetup radio Output_Range
:read: [20];VOLT:RANG?
:readmath: replaceRX(replaceRX(trim(unQuote(value)),"P(8|15|25)V","LOW"),"P(20|30|50)V","HIGH")
:write: OUTP OFF;[*OPC];VOLT:RANG (value);[*OPC]
:string:
:updatedelayed: 0.3
:update: Output Voltage Current Pending_Voltage Pending_Current
:tip: Selects the output range. The Voltage and Current Limit ceilings follow this setting. Changing range always switches the output off first.
LowRangeName LOW
HighRangeName HIGH

#cmdSetup separator -
1 100 Sunken

#cmdSetup separator -
:labelformat: bold (80,80,80)
1 100 Empty
center Setpoints

#cmdSetup separator -
1 100 Sunken

#cmdSetup advNumber Voltage
:read: [20];VOLT?
:write: VOLT
:updatedelayed: 0.2
:format: D4
:buttontext: Set
:tip: Output voltage. The supply holds this until the load reaches the current limit.
V 0 inList(Output_Range,"LOW,0")?LowVoltageMax:HighVoltageMax

#cmdSetup advNumber Current
:read: [20];CURR?
:write: CURR
:updatedelayed: 0.2
:format: D4
:buttontext: Set
:tip: Current limit. Reaching it moves the supply into constant current, and the output voltage then falls to whatever sustains this current.
A 0 inList(Output_Range,"LOW,0")?LowCurrentMax:HighCurrentMax

#cmdSetup separator -
1 100 Sunken

#cmdSetup separator -
:labelformat: bold (80,80,80)
1 100 Empty
center Status

#cmdSetup separator -
1 100 Sunken

#cmdSetup indicator Temperature
:read: [20];STAT:QUES:COND?
:tip: Overtemperature shutdown. Check ventilation and the fan if this lights.
Normal (int(value)&16)==0 green
Overtemperature (int(value)&16)!=0 red


#cmdSetup separator -
1 100 Sunken

#cmdSetup separator -
:labelformat: bold (80,80,80)
1 100 Empty
center Settings View

#cmdSetup comboboxHot Settings_View
:read: getView?
:write: setView
:string:
:tip: Select which settings panel to display
Basic_Setup BasicSetup
Fine_Adjust FineAdjust
Protection Protection
Trigger Trigger
Utility Utility

#cmdSetup selector Settings_View_Selector
Settings_View
BasicSetup BasicSetup.
FineAdjust FineAdjust.
Protection Protection.
Trigger Trigger.
Utility Utility.

#cmdSetup separator -
1 100 Sunken
#cmdSetup separator - BasicSetup
1 100 Sunken

#cmdSetup separator - BasicSetup
6 100 Empty

#cmdSetup separator - BasicSetup
1 100 Sunken



; Logging scope (All channels / V and I only) is chosen from the mode menu, not
; here - see the #cmdMode entries near the top. Keeping it a mode is deliberate:
; TestController locks the mode while logging runs, so a log's columns cannot
; change underneath it mid-run.

; ------------------------------------------------------- triggered setpoints
; Stage a voltage/current pair and apply it on a trigger, for a timed or
; synchronised step rather than an immediate change.

#cmdSetup separator - BasicSetup
:labelformat: bold (80,80,80)
1 100 Empty
center Memory

#cmdSetup separator - BasicSetup
1 100 Sunken

#cmdSetup buttons Save_State BasicSetup
:write: *SAV #;[*OPC]
:tip: Store voltage, current, range, output state, protection, trigger, display and step settings in nonvolatile memory.
Slot_1 1
Slot_2 2
Slot_3 3

#cmdSetup buttons Recall_State BasicSetup
:write: *RCL #;[*OPC]
:updatedelayed: 0.3
:update: Output Voltage Current Pending_Voltage Pending_Current
:tip: Recall a stored state. Careful - a stored state can include Output ON, so the supply may start sourcing as soon as it is recalled.
Slot_1 1
Slot_2 2
Slot_3 3

#cmdSetup separator - BasicSetup
6 100 Empty

#cmdSetup separator - BasicSetup
1 100 Sunken

#cmdSetup separator - BasicSetup
:labelformat: bold (80,80,80)
1 100 Empty
center Front Panel

#cmdSetup separator - BasicSetup
1 100 Sunken

#cmdSetup buttonsOn Display BasicSetup
:read: [20];DISP?
:write: DISP
:updatedelayed: 0.2
:tip: Turn the front-panel display on or off. Returning the instrument to local control turns it back on.
Off 0
On 1

#cmdSetup text Display_Message BasicSetup
:read: [20];DISP:TEXT?
:readmath: unQuote(value)
:write: SetDisplayText
:tip: Show up to 12 characters on the front panel.
12

; DISP:TEXT:CLE returns the panel to its normal readout but leaves the text
; buffer holding the old string, so the :update: below used to re-read the
; message straight back into the field. Writing an empty string first empties
; the buffer - accepted with no error on an E3633A, and DISP:TEXT? then reads
; back a genuinely empty "".
#cmdSetup button Clear_Display_Message BasicSetup
:write: DISP:TEXT "";DISP:TEXT:CLE
:updatedelayed: 0.2
:update: Display_Message
:tip: Remove the message and return the display to the normal readout. If the field repopulates instead of going blank, the supply refused the empty-string write and is still reporting the last text sent - the panel itself is clear.

#cmdSetup separator - FineAdjust
1 100 Sunken

#cmdSetup separator - FineAdjust
:labelformat: bold (80,80,80)
1 100 Empty
center Voltage

#cmdSetup separator - FineAdjust
1 100 Sunken

; Named _Increment rather than _Step: this sets how far the Down/Up buttons move
; per press, not a value to sweep. TestController's Steps popup lists every
; adjustable field by name regardless of page, and "..._Step" reads exactly like
; something meant for a Steps program - it is not.
#cmdSetup number Voltage_Increment FineAdjust
:read: [20];VOLT:STEP?
:write: VOLT:STEP
:format: D6
:buttontext: Set
:tip: Amount each Voltage Down/Up press moves the output voltage.
V VoltageStepMin HighVoltageMax

#cmdSetup button Smallest_Voltage_Increment FineAdjust
:write: VOLT:STEP DEF
:updatedelayed: 0.2
:update: Voltage_Increment
:tip: Set the increment to the instrument's finest voltage resolution.

#cmdSetup buttons Voltage_Adjust FineAdjust
:write: VOLT
:updatedelayed: 0.2
:update: Voltage
:tip: Move the output voltage down or up by one step. The supply refuses a move that would leave the selected range.
Down DOWN
Up UP

#cmdSetup separator - FineAdjust
6 100 Empty

#cmdSetup separator - FineAdjust
1 100 Sunken

#cmdSetup separator - FineAdjust
:labelformat: bold (80,80,80)
1 100 Empty
center Current

#cmdSetup separator - FineAdjust
1 100 Sunken

#cmdSetup number Current_Increment FineAdjust
:read: [20];CURR:STEP?
:write: CURR:STEP
:format: D6
:buttontext: Set
:tip: Amount each Current Down/Up press moves the current limit.
A CurrentStepMin HighCurrentMax

#cmdSetup button Smallest_Current_Increment FineAdjust
:write: CURR:STEP DEF
:updatedelayed: 0.2
:update: Current_Increment
:tip: Set the increment to the instrument's finest current resolution.

#cmdSetup buttons Current_Adjust FineAdjust
:write: CURR
:updatedelayed: 0.2
:update: Current
:tip: Move the current limit down or up by one step. The supply refuses a move that would leave the selected range.
Down DOWN
Up UP

; ------------------------------------------------------------------ protection

#cmdSetup separator - Protection
1 100 Sunken

#cmdSetup separator - Protection
:labelformat: bold (80,80,80)
1 100 Empty
center Overvoltage

#cmdSetup separator - Protection
1 100 Sunken

#cmdSetup number OVP_Limit Protection
:read: [20];VOLT:PROT?
:write: VOLT:PROT
:updatedelayed: 0.2
:update: OVP_Tripped
:format: D3
:buttontext: Set
:tip: Overvoltage threshold. A trip disables the output and fires the crowbar, so set it above your working voltage with margin.
V 1 OVPMax

#cmdSetup buttonsOn OVP_Enable Protection
:read: [20];VOLT:PROT:STAT?
:write: VOLT:PROT:STAT
:updatedelayed: 0.2
:update: OVP_Tripped
:tip: Arm or disarm overvoltage protection.
Off 0
On 1

#cmdSetup indicator OVP_Tripped Protection
:read: [20];VOLT:PROT:TRIP?
:tip: Lights when overvoltage protection has fired. The output stays off until the trip is cleared.
Clear int(value)==0 green
Tripped int(value)==1 red

#cmdSetup button Clear_OVP_Trip Protection
:write: VOLT:PROT:CLE;[*OPC]
:updatedelayed: 0.2
:update: OVP_Tripped Output
:tip: Clear an overvoltage trip. Lower the voltage setpoint or raise the threshold first, or it will trip again.

#cmdSetup separator - Protection
6 100 Empty

#cmdSetup separator - Protection
1 100 Sunken

#cmdSetup separator - Protection
:labelformat: bold (80,80,80)
1 100 Empty
center Overcurrent

#cmdSetup separator - Protection
1 100 Sunken

#cmdSetup number OCP_Limit Protection
:read: [20];CURR:PROT?
:write: CURR:PROT
:updatedelayed: 0.2
:update: OCP_Tripped
:format: D3
:buttontext: Set
:tip: Overcurrent threshold. A trip programs the output current to zero. This is separate from the Current Limit above, which regulates rather than trips.
A 0 OCPMax

#cmdSetup buttonsOn OCP_Enable Protection
:read: [20];CURR:PROT:STAT?
:write: CURR:PROT:STAT
:updatedelayed: 0.2
:update: OCP_Tripped
:tip: Arm or disarm overcurrent protection.
Off 0
On 1

#cmdSetup indicator OCP_Tripped Protection
:read: [20];CURR:PROT:TRIP?
:tip: Lights when overcurrent protection has fired.
Clear int(value)==0 green
Tripped int(value)==1 red

#cmdSetup button Clear_OCP_Trip Protection
:write: CURR:PROT:CLE;[*OPC]
:updatedelayed: 0.2
:update: OCP_Tripped Output
:tip: Clear an overcurrent trip. Reduce the load or raise the threshold first, or it will trip again.

#cmdSetup separator - Trigger
1 100 Sunken

#cmdSetup separator - Trigger
:labelformat: bold (80,80,80)
1 100 Empty
center Source

#cmdSetup separator - Trigger
1 100 Sunken

#cmdSetup radio Trigger_Source Trigger
:read: [20];TRIG:SOUR?
:write: TRIG:SOUR
:string:
:updatedelayed: 0.2
:tip: Bus waits for Trigger Now after Arm. Immediate applies the pending values as soon as Arm is pressed.
Bus BUS
Immediate IMM

#cmdSetup number Trigger_Delay Trigger
:read: [20];TRIG:DEL?
:write: TRIG:DEL
:format: D3
:buttontext: Set
:tip: Delay between the trigger and the pending values being applied. Ignored when the source is Immediate.
s 0 3600

#cmdSetup separator - Trigger
6 100 Empty

#cmdSetup separator - Trigger
1 100 Sunken

#cmdSetup separator - Trigger
:labelformat: bold (80,80,80)
1 100 Empty
center Pending Setpoints

#cmdSetup separator - Trigger
1 100 Sunken

#cmdSetup advNumber Pending_Voltage Trigger
:read: [20];VOLT:TRIG?
:write: VOLT:TRIG
:format: D4
:buttontext: Set
:tip: Voltage that a trigger will transfer to the live setpoint.
V 0 inList(Output_Range,"LOW,0")?LowVoltageMax:HighVoltageMax

#cmdSetup advNumber Pending_Current Trigger
:read: [20];CURR:TRIG?
:write: CURR:TRIG
:format: D4
:buttontext: Set
:tip: Current limit that a trigger will transfer to the live setpoint.
A 0 inList(Output_Range,"LOW,0")?LowCurrentMax:HighCurrentMax

#cmdSetup separator - Trigger
6 100 Empty

#cmdSetup button Arm Trigger
:write: INIT
:updatedelayed: 0.2
:update: Voltage Current
:tip: Arm the trigger. With source Bus the supply then waits for Trigger Now; with Immediate the pending values are applied at once.

#cmdSetup button Trigger_Now Trigger
:write: *TRG;*WAI
:updatedelayed: 0.2
:update: Voltage Current
:tip: Fire the bus trigger, applying the pending setpoints. Only has an effect after Arm, with the source set to Bus.

#cmdSetup button Beep Utility
:write: SYST:BEEP
:tip: Sound the beeper once - handy for identifying which supply on the bench you are talking to.

#cmdSetup separator - Utility
6 100 Empty

#cmdSetup separator - Utility
1 100 Sunken

#cmdSetup separator - Utility
:labelformat: bold (80,80,80)
1 100 Empty
center Diagnostics

#cmdSetup separator - Utility
1 100 Sunken

#cmdSetup infoAsk Identity Utility
:read: [20];*IDN?
:buttontext: Read ID
:tip: Manufacturer, model, serial field and firmware revisions.

#cmdSetup infoAsk SCPI_Version Utility
:read: [20];SYST:VERS?
:buttontext: Read Version
:tip: The SCPI language version this instrument implements.

#cmdSetup infoAsk Last_Error Utility
:read: [20];SYST:ERR?
:buttontext: Pop Error
:tip: Read and remove the oldest entry from the error queue. Note a rejected query on this family reports its error one command late.

#cmdSetup infoAsk Status_Byte Utility
:read: [20];*STB?
:buttontext: Read STB
:tip: Read the Status Byte without clearing its Request Service bit.

#cmdSetup infoAsk Questionable_Enable Utility
:read: [20];STAT:QUES:ENAB?
:buttontext: Read Mask
:tip: Read the Questionable Status enable mask without clearing event bits.

